
//Main Code
load_file("nrngui.hoc") //load basics library
load_file("ranstream.hoc") //for InGauss random seed
load_file("PD_Parameters.hoc") //Parameters
////////////////////////////////////////////////////
MAKE_M1_LAYER = 0  // Testing first
ADD_I_to_M1 = 0
ADD_I_to_VL = 0
////////////////////////////////////////////////////////
load_file("PD4_CellsTemplate.hoc") //load basics library  Note: Parameters for Cells template are specified inside

strdef dirLoc, Vdiff_WT, Vdiff_KO
sprint(dirLoc,"SimResult/WT_KO_testInjI/")
objref WT, KO, WT_Inj, KO_Inj,  WT_IC, KO_IC
Mean = 0
Del = 1000
Dur =  1000
IC_AMP = 0
WT_delV = 0
KO_delV = 0
{ WT_T1 = 0 WT_T2 = 0 KO_T1 = 0 KO_T2 = 0 WT_minV = v_init KO_minV = v_init  WT_maxV = v_init KO_maxV = v_init}

T1 = 900
T2 = 1800

WT = new WT_Cell()
access WT.soma
WT_Inj = new InGauss(0.5)
WT_Inj.stdev = 0
WT_Inj.mean = -1*Mean
WT_Inj.del = Del
WT_Inj.dur = Dur
WT_IC = new IClamp(0.5)
WT_IC.amp = IC_AMP
WT_IC.del = 0
WT_IC.dur = 1e09 

KO = new KO_Cell()
access KO.soma
KO_Inj = new InGauss(0.5)
KO_Inj.stdev =0
KO_Inj.mean  = -1*Mean
KO_Inj.del = Del
KO_Inj.dur = Dur

KO_IC = new IClamp(0.5)
KO_IC.amp = IC_AMP
KO_IC.del = 0
KO_IC.dur = 1e09

objref WT_V, KO_V
WT_V = new Vector()
KO_V = new Vector()

WT_V.record(&WT.soma.v(0.5),1)
KO_V.record(&KO.soma.v(0.5),1)

proc set_injI(){
WT_Inj.mean = -1*Mean
WT_Inj.del = Del
WT_Inj.dur = Dur
KO_Inj.mean = -1*Mean
KO_Inj.del = Del
KO_Inj.dur = Dur
}

proc set_CellParameters(){
//WT
	WT.soma.L = SOMA_SIZE_L 
	WT.soma.diam = SOMA_SIZE_diam
	WT.soma.Ra = SOMA_Ra //ohm-cm
	WT.soma.cm = SOMA_cm // uF/cm2
    WT.soma.gnabar_hh = GNaBAR_HH  //GNaBAR_HH //0.12s
    WT.soma.gkbar_hh = GKBAR_HH  //GKBAR_HH //0.036 
    WT.soma.g_pas = GL_PAS  //GL_PAS //0.0001
    WT.soma.e_pas = EL_PAS //EL_PAS //-60
	WT.soma.ena = ENa_HH
	WT.soma.ek = EK_HH
	WT.soma.gmax_CaT = GCaMAX_CaT
	WT.soma.eca = ECa_CaT
	
//KO
	KO.soma.L = SOMA_SIZE_L 
	KO.soma.diam = SOMA_SIZE_diam
	KO.soma.Ra = SOMA_Ra //ohm-cm0
	KO.soma.cm = SOMA_cm // uF/cm2
    KO.soma.gnabar_hh = GNaBAR_HH  //GNaBAR_HH //0.12
    KO.soma.gkbar_hh = GKBAR_HH  //GKBAR_HH //0.036 
    KO.soma.g_pas = GL_PAS  //GL_PAS //0.0001
    KO.soma.e_pas = EL_PAS //EL_PAS //-60
	KO.soma.ena = ENa_HH
	KO.soma.ek = EK_HH

}


proc saveVolt(){localobj fout strdef fname //$1 = file name
fout = new File()
sprint(fname,"%sSomaVolt_Imean%g_Idel%g_Idur%g_ICamp%g_L%g_diam%g_Ra%g_cm%g_gnabar%g_gkbar%g_gl%g_el%g_ena%g_ek%g_gCaT%g_eca%g_T%g.txt",dirLoc,-1*WT_Inj.mean,WT_Inj.del,WT_Inj.dur, WT_IC.amp,SOMA_SIZE_L, SOMA_SIZE_diam,SOMA_Ra,SOMA_cm,GNaBAR_HH,GKBAR_HH,GL_PAS,EL_PAS,ENa_HH,EK_HH,GCaMAX_CaT,ECa_CaT,tstop) 
fout.wopen(fname)
WT_V.printf(fout,"%g\t",0,WT_V.size-1)
KO_V.printf(fout,"%g\t",0,KO_V.size-1)
fout.close()
printf("Saved file :: %s\n",fname)
printf("-------------------------------------------------\n\n")
}

proc show_V_diff(){
WT_T1 = WT_V.x(T1)
WT_T2 = WT_V.x(T2)
KO_T1 = KO_V.x(T1)
KO_T2 = KO_V.x(T2)
WT_delV = WT_V.x(T2) - WT_V.x(T1)
KO_delV = KO_V.x(T2) - KO_V.x(T1)
WT_minV = WT_V.c(T1,T2).min()
KO_minV = KO_V.c(T1,T2).min()
WT_maxV = WT_V.c(T1,T2).max()
KO_maxV = KO_V.c(T1,T2).max()
}


proc panel_button() { //panel to choose cell's ID to plot
xpanel("Setting Simulation Parameter")
xlabel("")
xlabel("=== Setting current injection parameters ===")
xvalue("Set current injection value","Mean",1,"{WT_Inj.mean = -1*Mean KO_Inj.mean = -1*Mean}",0,1)
xvalue("Set current injection delay","Del",1,"{WT_Inj.del = Del KO_Inj.del = Del}",0,1)
xvalue("Set current injection duration","Dur",1,"{WT_Inj.dur = Dur KO_Inj.dur = Dur}",0,1)
//xbutton("set injected Current", "set_injI()")
xlabel("=== Setting I Clamp parameters ===")
xvalue("Set IClamp amplitude","IC_AMP",1,"{WT_IC.amp = IC_AMP KO_IC.amp = IC_AMP }",0,1)

xlabel("")
xlabel("=== Set parameters for cell's properties ===")
xvalue("Set Cell parameter : SOMA_SIZE_L","SOMA_SIZE_L",1,"{WT.soma.L = SOMA_SIZE_L  KO.soma.L = SOMA_SIZE_L }",0,1)
xvalue("Set Cell parameter : SOMA_SIZE_diam","SOMA_SIZE_diam",1,"{WT.soma.diam = SOMA_SIZE_diam  KO.soma.diam = SOMA_SIZE_diam }",0,1)
xvalue("Set Cell parameter : SOMA_Ra","SOMA_Ra",1,"{WT.soma.Ra = SOMA_Ra KO.soma.Ra = SOMA_Ra}",0,1)
xvalue("Set Cell parameter : SOMA_cm","SOMA_cm",1,"{WT.soma.cm = SOMA_cm KO.soma.cm = SOMA_cm}",0,1)
xvalue("Set Cell parameter : GNaBAR_HH","GNaBAR_HH",1,"{WT.soma.gnabar_hh = GNaBAR_HH  KO.soma.gnabar_hh = GNaBAR_HH}",0,1)
xvalue("Set Cell parameter : GKBAR_HH","GKBAR_HH",1,"{WT.soma.gkbar_hh = GKBAR_HH  KO.soma.gkbar_hh = GKBAR_HH} ",0,1)
xvalue("Set Cell parameter : ENa_HH","ENa_HH",1,"{WT.soma.ena = ENa_HH KO.soma.ena = ENa_HH}",0,1)
xvalue("Set Cell parameter : EK_HH","EK_HH",1,"{WT.soma.ek = EK_HH KO.soma.ek = EK_HH}",0,1)
xvalue("Set Cell parameter : GL_PAS","GL_PAS",1,"{WT.soma.g_pas = GL_PAS  KO.soma.g_pas = GL_PAS}",0,1)
xvalue("Set Cell parameter : EL_PAS","EL_PAS",1,"{WT.soma.e_pas = EL_PAS KO.soma.e_pas = EL_PAS}",0,1)
xvalue("Set Cell parameter : GCaMAX_CaT","GCaMAX_CaT",1,"{WT.soma.gmax_CaT = GCaMAX_CaT}",0,1)
xvalue("Set Cell parameter : ECa_CaT","ECa_CaT",1,"{WT.soma.eca = ECa_CaT}",0,1)
xlabel("")
xlabel("=== Measure difference in voltage ===")
xvalue("T1","T1",1,"T1",0,1) xvalue("T2","T2",1,"T2",0,1)
xbutton("Voltage Difference", "show_V_diff()") 

xfixedvalue("WT_T1")  xfixedvalue("WT_T2")  
xfixedvalue("KO_T1")  xfixedvalue("KO_T2")  
xlabel("")
xfixedvalue("WT_delV")
xfixedvalue("KO_delV")
xlabel("")
xfixedvalue("WT_minV")  xfixedvalue("KO_minV")  
xfixedvalue("WT_maxV")  xfixedvalue("KO_maxV") 
xfixedvalue("WT_maxV - WT_minV")  xfixedvalue("KO_maxV- KO_minV")  
//xbutton("set_CellParameters", "set_CellParameters()")
xbutton("saveVolt", "saveVolt()")
xpanel()
}

load_file("WT_KO_injI_showI.ses")
tstop = 3000
v_init = -70
WT_minV = v_init 
KO_minV = v_init

panel_button()

